PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['imgs\\star.png', 'imgs\\sort-btn.png', 'imgs\\end-btn.png', 'imgs\\empty-box.png', 'imgs\\pot1.png', 'imgs\\pot2.png', 'imgs\\pot3.png', 'imgs\\pot4.png', 'imgs\\pot5.png', 'imgs\\pot6.png', 'imgs\\pot7.png', 'imgs\\pot8.png', 'imgs\\spin-btn.png', 'imgs\\turntable.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = spinThePots
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Routines
  Routine spin
    CodeComponent spin_code
      Code Type = Auto->JS
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      Begin Routine:
        SPIN_DUR = 4  # Seconds
        SPEED_MULTIPLER = 3
      Each Frame:
        # Quadratic equation: y = at(b-t)
        shift = SPEED_MULTIPLER * t * (SPIN_DUR - t)

        for i in range(N_POTS):
            pot_angles[i] += shift
            pots[i].pos = deg2xy(pot_angles[i], RADIUS)

        """PsychoPy and PsychoJS have opposite directions
        for angular displacement. We make it work for
        PsychoJS here. If you wish to run the PsychoPy
        version, change 'Auto->JS' to 'Both' and uncomment
        the appropriate line below."""

        turntable.ori = (turntable.ori - shift)  # PsychoJS
        #turntable.ori = (turntable.ori + shift)  # PsychoPy
      End Routine:
        # Update sticker positions after spin ends
        for sticker in stickers:
            for pot in pots:
                if pot.content == sticker.name:
                    sticker.pos = pot.pos
                    break

        for i in range(N_POTS):
            pots[i].blank = visual.ImageStim(
                win=win,
                name=f"blank{i + 1}",
                image=f"imgs/empty-box.png",
                pos=pots[i].pos,
                size=0.05,
                opacity=1.0
            )

        end_button = visual.ImageStim(
            win=win,
            name="end_button",
            image="imgs/end-btn.png",
            pos=(0, -0.4),
            size=(0, 0)
        )
        end_button.autoDraw = True
    TextComponent spin_timer
      letterHeight = 0.02
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SPIN_DUR
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  Routine place
    CodeComponent place_code
      Code Type = Auto->JS
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      Before Experiment:
        def deg2xy(deg, radius):
            """Convert polar (angle in degrees) to
            Cartesian coordinates.
            """
            rad, = (deg * pi / 180),
            x, y = radius * sin(rad),  radius * cos(rad)
            return x, y

        def dxdy(a, b):
            """Calculate the x and y displacements
            between objects a and b (b as reference).
            """
            dx, dy = a[0] - b[0],  a[1] - b[1]
            return dx, dy

        def dist2(p, q):
            """Calculate the square of the distance
            between objects a and b.
            """
            dx, dy = dxdy(p, q)
            return dx * dx + dy * dy

        def snapped(a, b, thresh2=THRESH2):
            """Check if an object a is close enough to
            another object b. If yes, move object a to
            object b's position and return True. If no,
            return False.
            """
            if dist2(a.pos, b.pos) <= thresh2:
                a.pos = b.pos
                return True
            return False

        def repelled(a, b, r=0.1, thresh2=THRESH2):
            """Check if an object a is too close to
            another object b. If yes, move object a away
            from object b and return True. If no, return
            False.
            """
            d2, = dist2(a.pos, b.pos),
            if d2 > 0 and d2 <= thresh2:
                ratio, = (r / sqrt(d2)),
                dx, dy = dxdy(a.pos, b.pos)
                di, dj = ratio * dx, ratio * dy
                i, j = b.pos
                a.pos = (i + di, j + dj)
                return True
            return False

        def linear_coords(start, end, n):
            """Generate a list of (x, y) coordinates along
            a line from start to end over n frames.
            """
            x0, x1 = start[0], end[0]
            y0, y1 = start[1], end[1]
            dx, dy = (x1 - x0) / n, (y1 - y0) / n
            xys, = [],
            for i in range(n):
                xys.append((x0 + dx * i, y0 + dy * i))
            return xys
      Begin Experiment:
        SHOW_DEBUG = False

        N_POTS = 8
        N_STICKERS = 6
        TOTAL_ANIMATION_SECONDS = 3

        "Length/Position have units of % screen height"
        RADIUS = 0.25
        STICKER_X0 = 0.5
        STICKER_Y0 = 0.25

        """Snap and repel threshold
        - Distance of 5% of screen from center of pot
        - Why 5%: 'It looks about right'"""
        THRESH2 = 0.05 * 0.05

        draggingInProgress = False
        draggedObject = None

        # Size: 773 x 562 px
        SORT_BUTTON_SIZE = (0.136, 0.1)

        # Size: 874 x 562 px
        SPIN_BUTTON_SIZE = (0.156, 0.1)

        # Size: 732x x 562 px
        END_BUTTON_SIZE = (0.13, 0.1)

        DEG_PER_POT = 360 / N_POTS
        SEC_PER_STICKER = TOTAL_ANIMATION_SECONDS / N_STICKERS
        N_FRAMES = int(SEC_PER_STICKER / frameDur)
      Begin Routine:
        auto_sorting = False
        place_mouse_state = 0
        prev_place_mouse_state = 0

        # Initialize sort button
        sort_button = visual.ImageStim(
            win=win,
            name="sort_button",
            image="imgs/sort-btn.png",
            pos=(0.5, -0.4),
            size=SORT_BUTTON_SIZE
        )
        sort_button.autoDraw = True

        # Initialize spin button
        spin_button = visual.ImageStim(
            win=win,
            name="spin_button",
            image="imgs/spin-btn.png",
            pos=(0, -0.4),
            size=(0, 0)
        )
        spin_button.autoDraw = True

        # Initialize turntable
        turntable = visual.ImageStim(
            win=win,
            name="turntable",
            image="imgs/turntable.png",
            pos=(0, 0),
            size=0.65,
            opacity=0.7
        )
        turntable.autoDraw = True

        # Initialize pots
        pots = []
        pot_angles = []
        for i in range(N_POTS):
            pot_angles.append(i * DEG_PER_POT)
            pots.append(visual.ImageStim(
                win=win,
                name=f"pot{i + 1}",
                image=f"imgs/pot{i + 1}.png",
                pos=deg2xy(pot_angles[i], RADIUS),
                size=0.1
            ))
            pots[-1].autoDraw = True
            pots[-1].content = None  # Try something new
            pots[-1].vis_t = None  # Try something new

        # Initialize stickers
        stickers = []
        sticker_coords = []
        for i in range(N_STICKERS):
            sticker_coords.append((
                STICKER_X0,
                STICKER_Y0 - 0.1 * i,
            ))
            stickers.append(visual.ImageStim(
                win=win,
                name=f"sticker{i + 1}",
                image=f"imgs/star.png",
                pos=sticker_coords[i],
                size=0.05
            ))
            stickers[-1].autoDraw = True
            stickers[-1].location = None  # Try something new

        # Generate animation coordinates
        pot_idxs = [0, 1, 3, 4, 5, 6]
        xyss = []
        for i in range(N_STICKERS):
            xyss.append(linear_coords(stickers[i].pos, pots[pot_idxs[i]].pos, N_FRAMES))

        start_frame = None
        idx = 0
        move_idx = 0
      Each Frame:
        # Real-time update so we don't have to keep track of every scenario
        stickers_left = 0
        for sticker in stickers:
            if sticker.location is None:
                stickers_left += 1

        if stickers_left < 1:
            spin_button.size = SPIN_BUTTON_SIZE
            sort_button.size = (0, 0)
        else:
            spin_button.size = (0, 0)
            sort_button.size = SORT_BUTTON_SIZE

        if auto_sorting:
            if move_idx < N_STICKERS:
                idx = frameN - start_frame - 1
                stickers[move_idx].pos = xyss[move_idx][idx]
                if idx + 1 >= len(xyss[move_idx]):
                    if snapped(stickers[move_idx], pots[pot_idxs[move_idx]]):
                        stickers[move_idx].location = pots[pot_idxs[move_idx]].name
                        pots[pot_idxs[move_idx]].content = stickers[move_idx].name
                    move_idx += 1
                    start_frame = frameN
            else:
                # Reset to allow auto-sort again
                auto_sorting = False
                move_idx = 0
        elif draggingInProgress:
            # draggedObject is guaranteed to be something
            if place_mouse.getPressed()[0] == 1:
                draggedObject.pos = place_mouse.getPos()
            else:
                # 'Drop' part (of drag and drop)
                draggingInProgress = False
                for pot in pots:
                    if pot.content is None:
                        # Check if sticker should be snapped
                        if snapped(draggedObject, pot):
                            pot.content = draggedObject.name
                            draggedObject.location = pot.name
                            break
                    else:
                        # Check if sticker should be repelled
                        if repelled(draggedObject, pot):
                            break
        else:
            # Check if dragging should be in progress
            for sticker in stickers:
                if place_mouse.isPressedIn(sticker):
                    draggingInProgress = True
                    draggedObject = sticker
                    sticker.location = None
                    for pot in pots:
                        if pot.content == sticker.name:
                            pot.content = None
                            break
            if not draggingInProgress:
                # Check if auto-sort is called
                place_mouse_state = place_mouse.getPressed()[0]
                if prev_place_mouse_state != place_mouse_state:
                    prev_place_mouse_state = place_mouse_state
                    if place_mouse_state == 1:
                        if sort_button.contains(place_mouse):
                            auto_sorting = True
                            start_frame = frameN
                            # Reset all before auto-sort
                            for pot in pots:
                                pot.content = None
                            for sticker in stickers:
                                sticker.location = None

        if SHOW_DEBUG:
            place_disp.text = f"""
        stickers_left = {stickers_left}
        {stickers[0].name}.location = {stickers[0].location}
        {stickers[1].name}.location = {stickers[1].location}
        {stickers[2].name}.location = {stickers[2].location}
        {stickers[3].name}.location = {stickers[3].location}
        {stickers[4].name}.location = {stickers[4].location}
        {stickers[5].name}.location = {stickers[5].location}
        """
      End Routine:
        for sticker in stickers:
            sticker.autoDraw = False

        spin_button.size = (0, 0)
        spin_button.autoDraw = False
        sort_button.autoDraw = False
    MouseComponent place_mouse
      clickable = spin_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent place_disp
      letterHeight = 0.02
      pos = (0.5, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        SHOW_DUR = 1.0  # Seconds
        SHOW_END = False
        END_EXPERIMENT = False

        write_current_row = False
        trial_mouse_state = 0
        prev_trial_mouse_state = 0

        chosen_pots = []
        current_working_memory_score = 16
        current_preservation_score = 0
        stickers_found = 0
        stickers_found_idx = 0
        guesses_left = 16

        trial_num = None
        sticker_names = []
        sticker_locations = []
        number_of_clicks = 0
        time_to_first_click = None
        time_to_last_click = None
        pot_chosen = None
        sticker_in_chosen_pot = None
        trial_outcome = None
      Begin Routine:
        if END_EXPERIMENT:
            continueRoutine = False
        else:
            trial_num = trials.thisRepN + 1

            # Record state at start of trial
            sticker_names = []
            sticker_locations = []
            for sticker in stickers:
                sticker_names.append(sticker.name)
                sticker_locations.append(sticker.location)

            number_of_clicks = 0
            time_to_first_click = None
            time_to_last_click = None
            pot_chosen = None
            sticker_in_chosen_pot = None
            trial_outcome = None
      Each Frame:
        if not END_EXPERIMENT:
            if SHOW_END:
                # The only thing allowed here
                # is clicking the end button
                end_button.size = END_BUTTON_SIZE
                trial_mouse_state = trial_mouse.getPressed()[0]
                if prev_trial_mouse_state != trial_mouse_state:
                    prev_trial_mouse_state = trial_mouse_state
                    if trial_mouse_state == 1:
                        if end_button.contains(trial_mouse):
                            END_EXPERIMENT = True
                            write_current_row = True
                            continueRoutine = False
            else:
                # Check if any click/tap took place
                trial_mouse_state = trial_mouse.getPressed()[0]
                if prev_trial_mouse_state != trial_mouse_state:
                    prev_trial_mouse_state = trial_mouse_state
                    if trial_mouse_state == 1:
                        # A click/tap took place
                        if number_of_clicks == 0:
                            time_to_first_click = t
                        number_of_clicks += 1
                        # Check if click/tap is on a pot
                        for pot in pots:
                            if pot.contains(trial_mouse):
                                if pot.vis_t is None:
                                    # Pot is clickable/tappable
                                    guesses_left -= 1
                                    time_to_last_click = t
                                    pot_chosen = pot.name
                                    # Update preservation score if
                                    # pot has been chosen before
                                    for chosen_pot in chosen_pots:
                                        if pot.name == chosen_pot:
                                            current_preservation_score += 1
                                            break
                                    chosen_pots.append(pot.name)
                                    # Check trial outcome
                                    if pot.content is None:
                                        trial_outcome = "wrong"
                                        current_working_memory_score -= 1
                                    else:
                                        trial_outcome = "correct"
                                        sticker_in_chosen_pot = pot.content
                                        stickers_found += 1
                                        # Remove sticker's location, but retain pot's content
                                        for sticker in stickers:
                                            if pot.content == sticker.name:
                                                sticker.location = None
                                                break
                                    pot.vis_t = globalClock.getTime()
                                    if trial_num < 16 and stickers_found < N_STICKERS:
                                        write_current_row = True
                                        continueRoutine = False
                                    else:
                                        SHOW_END = True

            for pot in pots:
                # Check if something needs to be shown
                if pot.vis_t is not None:
                    if globalClock.getTime() - pot.vis_t < SHOW_DUR:
                        if pot.content is None:
                            pot.blank.autoDraw = True
                        else:
                            for sticker in stickers:
                                if pot.content == sticker.name:
                                    sticker.autoDraw = True
                                    break
                    else:
                        if pot.content is None:
                            pot.blank.autoDraw = False
                        else:
                            # Move sticker to the side
                            for sticker in stickers:
                                if pot.content == sticker.name:
                                    sticker.pos = sticker_coords[stickers_found_idx]
                                    stickers_found_idx += 1
                                    break
                            pot.content = None
                        pot.vis_t = None

            if SHOW_DEBUG:
                trial_disp.text = f"""
        trial_num = {trial_num}
        stickers_found = {stickers_found}
        number_of_clicks = {number_of_clicks}
        time_to_first_click = {round(time_to_first_click, 3)}
        trial_mouse_state = {trial_mouse_state}
        prev_trial_mouse_state = {prev_trial_mouse_state}
        """
            else:
                trial_disp.text = f"Guesses left: {guesses_left}"
      End Routine:
        if write_current_row:
            write_current_row = False
            thisExp.addData("trial_num", trial_num)
            for i in range(N_STICKERS):
                thisExp.addData(f"{sticker_names[i]}_location", sticker_locations[i])
            thisExp.addData("number_of_clicks", number_of_clicks)
            thisExp.addData("time_to_first_click", time_to_first_click)
            thisExp.addData("time_to_last_click", time_to_last_click)
            thisExp.addData("pot_chosen", pot_chosen)
            thisExp.addData("sticker_in_chosen_pot", sticker_in_chosen_pot)
            thisExp.addData("trial_outcome", trial_outcome)
            thisExp.addData("current_working_memory_score", current_working_memory_score)
            thisExp.addData("current_preservation_score", current_preservation_score)
    MouseComponent trial_mouse
      clickable = pots[0], pots[1], pots[2], pots[3], pots[4], pots[5], pots[6], pots[7]
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent trial_disp
      letterHeight = 0.02
      pos = (0.6, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine place
  Routine spin
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 16
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    Routine trial
  LoopTerminator trials
